/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",            
            "io": "sawRobotIO1394-PSM2-27374.xml",
            "pid": "sawControllersPID-PSM.xml",            
            "kinematic": "psm-5mm-needle-drive.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-28247-foot-pedal.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM2",
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
