/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
