/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-32336.xml",
            "pid": "sawControllersPID-MTMR.xml",
            "kinematic": "mtmr.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-34863.xml",
            "pid": "sawControllersPID-MTML.xml",
            "kinematic": "mtml.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC", // comment this to use actual arm
            // "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM3-28613.xml",
            "pid": "sawControllersPID-PSM.xml",
            "kinematic": "psm-large-needle-driver.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM3"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
