/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "sawRobotIO1394-MTMR-foot-pedals.xml"
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM3"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
