/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM3"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
